PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Use version = 2023.2.1
  Window size (pixels) = [1920, 1080]
  expName = routeThreeExP
  keyboardBackend = ioHub
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Routines
  Routine trail
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    MovieComponent RouteThree
      backend = ffpyplayer
      forceEndRoutine = False
      movie = C:/Users/ReGame-XR Lab/Desktop/Videos/Video3CorrectedRoute3_0911.mp4
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1727
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    PolygonComponent SpanishRepeat01_noPedal
      fillColor = white
      opacity = 0
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 72
      stopVal [duration (s)] = 12
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    PolygonComponent bikebuddy_SlowRepeat01
      fillColor = white
      opacity = 0
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 131
      stopVal [duration (s)] = 11
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    PolygonComponent bikebuddy_FastRepeat01
      fillColor = white
      opacity = 0
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 150
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp
      allowedKeys = 'Q'
      forceEndRoutine = False
      startVal [condition] = 'Q'
      stopVal [condition] = 'Q'
      store = all keys
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        thisExp.addData('expStart_unix', time.time())
        thisExp.addData('expStart_mono', time.monotonic())
      Begin Routine:
        thisExp.addData('routeStart_unix', time.time())
        thisExp.addData('routeStart_mono', time.monotonic())
      End Experiment:
        thisExp.addData('expEnd_unix', time.time())
        thisExp.addData('expEnd_mono', time.monotonic())
      End Routine:
        thisExp.addData('routeEnd_unix', time.time())
        thisExp.addData('routeEnd_mono', time.monotonic())
Flow
  Routine trail
